CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>.*)-(?P<Proj>.*)_(?P<PA>.*)_(?P<Staining>.*)_(?P<Magnification>.*)_(?P<Substrate>.*)_(?P<BatchNumber>.*)_(?P<Timing>.*)_(?P<Condition>.*)_(?P<Image>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:MBP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Olig2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:PDGF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:2
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:6|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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCBlurry1
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Elsewhere...|
    Rules file name:QC_rules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCBlurry2
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Elsewhere...|
    Rules file name:QC_rules.txt
    Class number:3

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNA
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:200
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nucleus
    Name the objects to be identified:ExpandedNuclei
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:ExpandedNuclei
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_Ring
    Shrink smaller object prior to subtraction?:No

RescaleIntensity:[module_num:10|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
    Select the input image:DNA
    Name the output image:RescaleIntensity_DNA
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
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    Select the image to be colored blue:RescaleIntensity_DNA
    Name the output image:RescaleIntensity_DNA_ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_DNA_ColorImage
    Name the output image:SegmentationOutines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nucleus
    Select outline color:Green
    Select objects to display:ExpandedNuclei

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:SegmentationOutines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SegmentationOutlines
    Saved file format:png
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:14|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
    Hidden:3
    Select an image to measure:MBP
    Select an image to measure:Olig2
    Select an image to measure:PDGF
    Select objects to measure:Nucleus
    Select objects to measure:Cytoplasm_Ring

MeasureObjectIntensityDistribution:[module_num:15|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
    Hidden:3
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select an image to measure:MBP
    Select an image to measure:Olig2
    Select an image to measure:PDGF
    Select objects to measure:Nucleus
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm_Ring
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Nucleus
    Select objects to measure:Cytoplasm_Ring
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:18|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Elsewhere...|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nucleus
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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